PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = bci_project_stimuli
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine Instructions
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    TextComponent Instr
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
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      text:
        Welcome to the Experiment!

        In this task, you will see movement commands with videos on the screen. Please imagine following them with your right arm in mind. You will have 10 seconds to perform the task.

        > Keep a strong, steady focus on the action you are imagining.

        > Do not move any part of your body, try to be still.

        We hope you enjoy the task!
  Routine End
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    TextComponent end
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10.0
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      text:
        You are now at the end of part 1/part2.

        Thank You!



        We sincerely appreciate your time and effort in taking part in this experiment.


        Your contribution is invaluable to our project, and we are truly grateful for your participation.
  Routine ITI
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        import random

        iti = random.uniform(2,3)
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $iti
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  Routine baseline
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    TextComponent baseline_rec
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    CodeComponent base_mark
      Code Type = Py
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      Begin Routine:
        outlet.push_sample([000])
        timestamp = outlet.push_sample([000])
        thisExp.addData('marker', 000)
        thisExp.addData('marker_time', timestamp)
        print('Sent marker 000')
  Routine break1
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    TextComponent relax
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = REST
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    CodeComponent code_2
      Code Type = Py
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      End Routine:
        outlet.push_sample([200])
        timestamp = outlet.push_sample([200])
        thisExp.addData('marker', 200)
        thisExp.addData('marker_time', timestamp)
        print('Sent marker 200')
        print(timestamp)
  Routine init
    RoutineSettingsComponent init
      stopVal [duration (s)] = 1
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    CodeComponent markers
      Code Type = Py
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      Begin Experiment:
        from pylsl import StreamInfo, StreamOutlet
        info = StreamInfo(name='TriggerStream', type='Markers', channel_count=1, channel_format='int32', source_id='myuid12345')
        outlet = StreamOutlet(info)
        print('Start of stimulus presentation') #Cross-check that PsychoPy has sent the event to eego
  Routine post_trial
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    TextComponent ERS
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
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    CodeComponent mov_end
      Code Type = Py
      Begin Routine:
        outlet.push_sample([999])
        timestamp = outlet.push_sample([999])
        thisExp.addData('marker', 999)
        thisExp.addData('marker_time', timestamp)
        print('Sent marker 999')
  Routine block1
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    MovieComponent block1_vid
      backend = ffpyplayer
      forceEndRoutine = False
      loop = True
      movie [set every repeat] = $os.path.join("mov_vid_new", class_mov)
      pos = (0, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 8
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    TextComponent block1_mov
      letterHeight = 0.07
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $class_commands
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    CodeComponent class_mark
      Code Type = Py
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      Begin Routine:
        outlet.push_sample([class_markers])
        timestamp = outlet.push_sample([class_markers])
        thisExp.addData('marker', class_markers)
        thisExp.addData('marker_time', timestamp)
        print(f"Sent marker {class_markers}")
    TextComponent standby1
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 13
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  Routine block2
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    MovieComponent block2_vid
      backend = ffpyplayer
      forceEndRoutine = False
      loop = True
      movie [set every repeat] = $os.path.join("mov_vid_new", class_mov)
      pos = (0, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 8.0
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    TextComponent block2_mov
      letterHeight = 0.07
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $class_commands
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    CodeComponent class_mark_2
      Code Type = Py
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      Begin Routine:
        outlet.push_sample([class_markers])
        timestamp = outlet.push_sample([class_markers])
        thisExp.addData('marker', class_markers)
        thisExp.addData('marker_time', timestamp)
        print(f"Sent marker {class_markers}")
    TextComponent standby2
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 13
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  Routine block3
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    MovieComponent block3_vid
      backend = ffpyplayer
      forceEndRoutine = False
      loop = True
      movie [set every repeat] = $os.path.join("mov_vid_new", class_mov)
      pos = (0, -0.2)
      size = (0.5, 0.5)
      startVal [time (s)] = 2
      stopVal [duration (s)] = 8
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    TextComponent block3_mov
      letterHeight = 0.07
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every repeat] = $class_commands
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    CodeComponent class_mark_3
      Code Type = Py
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      Begin Routine:
        outlet.push_sample([class_markers])
        timestamp = outlet.push_sample([class_markers])
        thisExp.addData('marker', class_markers)
        thisExp.addData('marker_time', timestamp)
        print(f"Sent marker {class_markers}")
    TextComponent standby3
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 13
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Flow
  Routine Instructions
  Routine init
  LoopInitiator block1_loop loopType="TrialHandler"
    conditionsFile = movement_commands_new.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('item_no', np.int64(1)), ('class_commands', 'Imagine sweeping your right arm side to side using your shoulder.'), ('class_markers', np.int64(101)), ('class_mov', 'vid_101_clean.mp4')]),
      OrderedDict([('item_no', np.int64(2)), ('class_commands', 'Imagine raising your right arm in front of you and then lowering it.'), ('class_markers', np.int64(102)), ('class_mov', 'vid_102_clean.mp4')]),
      OrderedDict([('item_no', np.int64(3)), ('class_commands', 'Imagine bending your right elbow, then straightening it.'), ('class_markers', np.int64(201)), ('class_mov', 'vid_201_clean.mp4')]),
      OrderedDict([('item_no', np.int64(4)), ('class_commands', 'Imagine wiping a screen with your right arm.'), ('class_markers', np.int64(202)), ('class_mov', 'vid_202_clean.mp4')]),
      OrderedDict([('item_no', np.int64(5)), ('class_commands', 'Imagine flicking your right wrist up and down.'), ('class_markers', np.int64(301)), ('class_mov', 'vid_301_clean.mp4')]),
      OrderedDict([('item_no', np.int64(6)), ('class_commands', 'Imagine making a fist with your right hand, then releasing it.'), ('class_markers', np.int64(302)), ('class_mov', 'vid_302_clean.mp4')])]
    Routine baseline
    Routine block1
    Routine ITI
  LoopTerminator block1_loop
  Routine break1
  LoopInitiator block2_loop loopType="TrialHandler"
    conditionsFile = movement_commands_new.csv
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('item_no', np.int64(1)), ('class_commands', 'Imagine sweeping your right arm side to side using your shoulder.'), ('class_markers', np.int64(101)), ('class_mov', 'vid_101_clean.mp4')]),
      OrderedDict([('item_no', np.int64(2)), ('class_commands', 'Imagine raising your right arm in front of you and then lowering it.'), ('class_markers', np.int64(102)), ('class_mov', 'vid_102_clean.mp4')]),
      OrderedDict([('item_no', np.int64(3)), ('class_commands', 'Imagine bending your right elbow, then straightening it.'), ('class_markers', np.int64(201)), ('class_mov', 'vid_201_clean.mp4')]),
      OrderedDict([('item_no', np.int64(4)), ('class_commands', 'Imagine wiping a screen with your right arm.'), ('class_markers', np.int64(202)), ('class_mov', 'vid_202_clean.mp4')]),
      OrderedDict([('item_no', np.int64(5)), ('class_commands', 'Imagine flicking your right wrist up and down.'), ('class_markers', np.int64(301)), ('class_mov', 'vid_301_clean.mp4')]),
      OrderedDict([('item_no', np.int64(6)), ('class_commands', 'Imagine making a fist with your right hand, then releasing it.'), ('class_markers', np.int64(302)), ('class_mov', 'vid_302_clean.mp4')])]
    Routine baseline
    Routine block2
    Routine ITI
  LoopTerminator block2_loop
  Routine break1
  LoopInitiator block3_loop loopType="TrialHandler"
    conditionsFile = movement_commands_new.csv
    loopType = random
    nReps = 5
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    conditions:
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    Routine baseline
    Routine block3
    Routine ITI
  LoopTerminator block3_loop
  Routine End
